PsychoPy2experiment version="3.0.1"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [800, 600]
  color = $[-1.000,-1.000,-1.000]
  expName = emofaces4
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Routines
  Routine happy
    ImageComponent image
      image [set every repeat] = $stimulus
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = 'b','c'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = first key
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  Routine sad
    ImageComponent image_2
      image [set every repeat] = $stimulus
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    KeyboardComponent key_resp_3
      allowedKeys [set every repeat] = 'c','b'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = first key
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  Routine angry
    ImageComponent image_3
      image [set every repeat] = $stimulus
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    KeyboardComponent key_resp_4
      allowedKeys [set every repeat] = 'b','c'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = first key
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  Routine neutral
    ImageComponent image_4
      image [set every repeat] = $stimulus
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    KeyboardComponent key_resp_5
      allowedKeys [set every repeat] = 'c','b'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = first key
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  Routine scrambled
    ImageComponent image_5
      image [set every repeat] = $stimulus
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    KeyboardComponent key_resp_6
      allowedKeys [set every repeat] = 'c','b'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = first key
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  Routine blank
    PolygonComponent polygon
      fillColor = $[1,1,1]
      opacity = .2
      pos [set every repeat] = [x, y]
      shape = cross
      size = (.05, .05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    KeyboardComponent key_resp_7
      allowedKeys [set every repeat] = 'c','b'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = first key
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  Routine end
    PolygonComponent polygon_2
      fillColor = $[1,1,1]
      opacity = 0
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine instructions
    TextComponent text
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        Instrucciones:

        Durante los siguientes 6 minutos verás una serie de imágenes.

        Mantén la atención en ellas e intenta no mover la cabeza.
    KeyboardComponent key_resp_9
      allowedKeys = 'c','b'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions2
    TextComponent text_2
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        Presiona un botón cada vez que notes un cambio en la imagen, utilizandolos 2 botones de forma alternada:

        izq, der, izq, ...
    KeyboardComponent key_resp_10
      allowedKeys = 'c','b'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instrucciones_3
    TextComponent text_3
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        Si piensas que la imagen es un hombre o una mujer, utiliza los botones así:

        izq:HOMBRE   der:MUJER

        Presiona un botón para iniciar...
    KeyboardComponent key_resp_8
      allowedKeys = 'c','b'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine start
    PolygonComponent polygon_3
      fillColor = $[1,1,1]
      nVertices = 5
      opacity = .2
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_11
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instructions
  Routine instructions2
  Routine instrucciones_3
  Routine start
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = happy.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stimulus', 'POFA/fMRI_POFA/001a.tif'), ('gender', 'f')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/014a.tif'), ('gender', 'm')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/007a.tif'), ('gender', 'f')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/022a.tif'), ('gender', 'm')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/042a.tif'), ('gender', 'f')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/074a.tif'), ('gender', 'm')])]
    Routine happy
  LoopTerminator trials
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = angry.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stimulus', 'POFA/fMRI_POFA/053a.tif'), ('gender', 'f')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/105a.tif'), ('gender', 'm')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/061a.tif'), ('gender', 'f')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/018a.tif'), ('gender', 'm')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/069a.tif'), ('gender', 'f')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/080a.tif'), ('gender', 'm')])]
    Routine angry
  LoopTerminator trials_3
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = neutral.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stimulus', 'POFA/fMRI_POFA/033a.tif'), ('gender', 'm')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/021a.tif'), ('gender', 'm')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/006a.tif'), ('gender', 'f')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/013a.tif'), ('gender', 'f')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/072a.tif'), ('gender', 'f')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/083a.tif'), ('gender', 'm')])]
    Routine neutral
  LoopTerminator trials_2
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = blank.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('x', 0.0), ('y', 0.0)]),
      OrderedDict([('x', -0.4), ('y', 0.2)]),
      OrderedDict([('x', 0.2), ('y', -0.4)]),
      OrderedDict([('x', 0.2), ('y', 0.0)]),
      OrderedDict([('x', -0.4), ('y', 0.0)]),
      OrderedDict([('x', -0.2), ('y', -0.2)])]
    Routine blank
  LoopTerminator trials_4
  LoopInitiator trials_5 loopType="TrialHandler"
    conditionsFile = sad.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stimulus', 'POFA/fMRI_POFA/008a.tif'), ('gender', 'f')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/023a.tif'), ('gender', 'm')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/049a.tif'), ('gender', 'f')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/036a.tif'), ('gender', 'm')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/075a.tif'), ('gender', 'm')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/086a.tif'), ('gender', 'f')])]
    Routine sad
  LoopTerminator trials_5
  LoopInitiator trials_6 loopType="TrialHandler"
    conditionsFile = scrambled.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stimulus', 'POFA/fMRI_POFA/033c.tif'), ('gender', 'm')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/021c.tif'), ('gender', 'm')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/006c.tif'), ('gender', 'f')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/013c.tif'), ('gender', 'f')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/072c.tif'), ('gender', 'f')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/083c.tif'), ('gender', 'm')])]
    Routine scrambled
  LoopTerminator trials_6
  LoopInitiator trials_7 loopType="TrialHandler"
    conditionsFile = happy.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stimulus', 'POFA/fMRI_POFA/001a.tif'), ('gender', 'f')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/014a.tif'), ('gender', 'm')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/007a.tif'), ('gender', 'f')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/022a.tif'), ('gender', 'm')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/042a.tif'), ('gender', 'f')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/074a.tif'), ('gender', 'm')])]
    Routine happy
  LoopTerminator trials_7
  LoopInitiator trials_9 loopType="TrialHandler"
    conditionsFile = angry.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stimulus', 'POFA/fMRI_POFA/053a.tif'), ('gender', 'f')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/105a.tif'), ('gender', 'm')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/061a.tif'), ('gender', 'f')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/018a.tif'), ('gender', 'm')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/069a.tif'), ('gender', 'f')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/080a.tif'), ('gender', 'm')])]
    Routine angry
  LoopTerminator trials_9
  LoopInitiator trials_8 loopType="TrialHandler"
    conditionsFile = neutral.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stimulus', 'POFA/fMRI_POFA/033a.tif'), ('gender', 'm')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/021a.tif'), ('gender', 'm')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/006a.tif'), ('gender', 'f')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/013a.tif'), ('gender', 'f')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/072a.tif'), ('gender', 'f')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/083a.tif'), ('gender', 'm')])]
    Routine neutral
  LoopTerminator trials_8
  LoopInitiator trials_10 loopType="TrialHandler"
    conditionsFile = blank.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('x', 0.0), ('y', 0.0)]),
      OrderedDict([('x', -0.4), ('y', 0.2)]),
      OrderedDict([('x', 0.2), ('y', -0.4)]),
      OrderedDict([('x', 0.2), ('y', 0.0)]),
      OrderedDict([('x', -0.4), ('y', 0.0)]),
      OrderedDict([('x', -0.2), ('y', -0.2)])]
    Routine blank
  LoopTerminator trials_10
  LoopInitiator trials_11 loopType="TrialHandler"
    conditionsFile = sad.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stimulus', 'POFA/fMRI_POFA/008a.tif'), ('gender', 'f')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/023a.tif'), ('gender', 'm')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/049a.tif'), ('gender', 'f')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/036a.tif'), ('gender', 'm')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/075a.tif'), ('gender', 'm')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/086a.tif'), ('gender', 'f')])]
    Routine sad
  LoopTerminator trials_11
  LoopInitiator trials_12 loopType="TrialHandler"
    conditionsFile = scrambled.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stimulus', 'POFA/fMRI_POFA/033c.tif'), ('gender', 'm')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/021c.tif'), ('gender', 'm')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/006c.tif'), ('gender', 'f')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/013c.tif'), ('gender', 'f')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/072c.tif'), ('gender', 'f')]),
      OrderedDict([('stimulus', 'POFA/fMRI_POFA/083c.tif'), ('gender', 'm')])]
    Routine scrambled
  LoopTerminator trials_12
  Routine end
